PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = nback
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instruction
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    ImageComponent Introduction_image
      image = material/Instruction_img.png
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent IEEG_Signal_s
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    TextComponent Begin_fix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
      text = +
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    ParallelOutComponent p_port_3
      address = 0x0378
      register = EIO
      startData = 100
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = True
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  Routine Task_name
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    ImageComponent image
      image [set every repeat] = $Task_img
      size = (0.6, 0.65)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_block
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        trialNum = 0;
        nbackScore = 0;
  Routine Trial
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    TextComponent Trial_fix
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Trial_text
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $Trial
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $Ans
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ParallelOutComponent p_port
      address = 0x0378
      register = EIO
      startData = $Triger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1;
        print('Trial Num =' + str(trialNum));
        if key_resp.corr==1:
            nbackScore = nbackScore + 1;
            print('正确');
            print('Score = ' + str(nbackScore));
        else:
            print('错误');
        nbackAccuracy = nbackScore/trialNum*100;
        nbackAccuracy_str = '正确率:' + str(nbackAccuracy) + '%';
        print(nbackAccuracy_str);
  Routine Fixation
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    TextComponent Block_fix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = +
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    ParallelOutComponent p_port_2
      address = 0x0378
      register = EIO
      startData = 300
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = True
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  Routine rest
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 请休息30秒
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  Routine Fixation_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $nbackAccuracy_str
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  Routine 请静息十分钟
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 请静息十分钟
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    KeyboardComponent key_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine 请静息十分钟
  Routine Blank
  LoopInitiator Task_loop loopType="TrialHandler"
    conditionsFile = list/Task_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Task_img': 'material/0back_name.png', 'Trial_loop_list': 'list/0back_block3_trial_loop.xlsx'},
      {'Task_img': 'material/2back_name.png', 'Trial_loop_list': 'list/2back_block1_trial_loop.xlsx'},
      {'Task_img': 'material/1back_name.png', 'Trial_loop_list': 'list/1back_block1_trial_loop.xlsx'},
      {'Task_img': 'material/0back_name.png', 'Trial_loop_list': 'list/0back_block2_trial_loop.xlsx'},
      {'Task_img': 'material/1back_name.png', 'Trial_loop_list': 'list/1back_block2_trial_loop.xlsx'},
      {'Task_img': 'material/2back_name.png', 'Trial_loop_list': 'list/2back_block2_trial_loop.xlsx'},
      {'Task_img': 'material/1back_name.png', 'Trial_loop_list': 'list/1back_block3_trial_loop.xlsx'},
      {'Task_img': 'material/0back_name.png', 'Trial_loop_list': 'list/0back_block1_trial_loop.xlsx'},
      {'Task_img': 'material/2back_name.png', 'Trial_loop_list': 'list/2back_block3_trial_loop.xlsx'}]
    Routine Task_name
    LoopInitiator Trial_loop loopType="TrialHandler"
      conditionsFile = $Trial_loop_list
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Trial_img': 'material/1.png', 'Ans': 1},
        {'Trial_img': 'material/2.png', 'Ans': 1}]
      Routine Trial
    LoopTerminator Trial_loop
    Routine Fixation_2
    Routine rest
    Routine Fixation
  LoopTerminator Task_loop
