PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = nback_practice
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instruction
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    ImageComponent Introduction_image
      image = material/Instruction_img.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent IEEG_Signal_s
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    TextComponent Begin_fix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine Task_name
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    ImageComponent image
      image [set every repeat] = $Task_img
      size = (0.6, 0.65)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_begin
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    TextComponent Trial_fix
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Trial_text
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $Trial
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $Ans
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine Over
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  Routine Fixation
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    TextComponent Block_fix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $nback_accuracy_str
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        nback_score=0;
        trial_num=0;
      Begin Routine:
        trial_num = trial_num + 1;
        if key_resp.corr==1:
            feedback = '正确'
            nback_score = nback_score + 1;
        else:
            feedback = '错误'
      End Routine:
        nback_accuracy = nback_score/trial_num*100;
        nback_accuracy_str = '正确率:' + str(nback_accuracy) + '%';
    TextComponent text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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Flow
  LoopInitiator Task_loop loopType="TrialHandler"
    conditionsFile = list/Task_loop_practice.xlsx
    loopType = sequential
    nReps = 3
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    conditions:
      [{'Task_img': 'material/0back_name.png', 'Trial_loop_list': 'list/0back_block_trial_loop_practice.xlsx'},
      {'Task_img': 'material/1back_name.png', 'Trial_loop_list': 'list/1back_block_trial_loop_practice.xlsx'},
      {'Task_img': 'material/2back_name.png', 'Trial_loop_list': 'list/2back_block_trial_loop_practice.xlsx'}]
    Routine Task_name
    LoopInitiator Trial_loop loopType="TrialHandler"
      conditionsFile = $Trial_loop_list
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Trial_img': 'material/1.png', 'Ans': 1},
        {'Trial_img': 'material/2.png', 'Ans': 1}]
      Routine Trial
      Routine feedback
    LoopTerminator Trial_loop
    Routine Fixation
  LoopTerminator Task_loop
